PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = searchDisc
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Routines
  Routine trial
    ImageComponent dispStimuli
      image [set every repeat] = $ImageFile
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        trialCounter=0;
      Begin Routine:
        trialCounter= trialCounter+ 1;
  Routine break_2
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        #msg variable just needs some value at start
        msg='doh'
      Begin JS Experiment:
        msg = "";
      Begin Routine:
        if trials.thisTrialN > 0 and trials.thisTrialN % 19 != 0 and trialCounter!=1:
            continueRoutine = False

        nCorr = trials.data['key_resp_2.corr'].sum() #.std(), .mean() also available
        meanRt = trials.data['key_resp_2.rt'].mean()
        msg = "You have completed %i out of 96 trials. You got %i trials correct (rt=%.2f). Press space bar to continue.trial counter %i" %(trials.thisN,nCorr,meanRt,trialCounter)
      Each Frame:
        if trials.thisTrialN > 0 and trials.thisTrialN % 19 != 0 and trialCounter!=1:
            continueRoutine = False

        nCorr = trials.data['key_resp_2.corr'].sum() #.std(), .mean() also available
        meanRt = trials.data['key_resp_2.rt'].mean()
        msg = "You have completed %i out of 96 trials. You got %i trials correct (rt=%.2f). Press space bar to continue.trial counter %i" %(trials.thisN,nCorr,meanRt,trialCounter)
    TextComponent breakMessage
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine welcomeScreen
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment.
        Your task is to look for a blue disc and indicate if it faces to the left or right.
        If the disc faces left press 1.
        If the disc faces right press 2.
        Be as quick and as accurate as possible.
        Press space bar to start
Flow
  Routine welcomeScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = image_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'images/exp1a_trial_0_colour1_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_1_colour1_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_2_colour1_distractors9_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_3_colour1_distractors19_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_4_colour1_distractors31_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_5_colour2_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_6_colour2_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_7_colour2_distractors9_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_8_colour2_distractors19_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_9_colour2_distractors31_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_10_colour3_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_11_colour3_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)])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
    Routine trial
    Routine break_2
  LoopTerminator trials
