PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = searchDisc4
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Routines
  Routine trial
    ImageComponent dispStimuli
      image [set every repeat] = $ImageFile
      size [set every repeat] = (50*x_scale, 28.125*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine break_2
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        msg='doh'
        trialCounter=0
        accuracySum=0
        totRT=0
      Begin JS Experiment:
        msg = "";
        trialCounter=0;
        accuracySum=0;
        totRT=0;

        //round = function(num, n=0) {
        //   return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        //}
      Begin JS Routine:
        trialCounter=trialCounter+1;

        if(key_resp_2.corr) {
            accuracySum = accuracySum + 1;
            totRT = totRT + key_resp_2.rt;
        }

        percentAccurate = accuracySum/trialCounter * 100;
        percentAccurate = round(percentAccurate, 3);
        meanRT = totRT/trialCounter;
        meanRT = round(meanRT, 3);

        msg = "You have completed " + trialCounter + " trials. You are " + percentAccurate + "% accurate so far, with an average reaction time of " + meanRT + "s. Press space bar to continue";
      Begin Routine:
        trialCounter = trialCounter + 1

        if key_resp_2.corr:
            accuracySum = accuracySum + 1
            totRT = totRT + key_resp_2.rt

        percentAccurate = accuracySum/trialCounter * 100
        percentAccurate = round(percentAccurate, 3)
        meanRT = totRT/trialCounter
        meanRT = round(meanRT, 3)

        msg = "You have completed %i out of 800 trials. You are %i %% accurate so far, with an average reaction time of %.2f sec. Press 'c' to continue." %(trialCounter,percentAccurate,meanRT)
      Each Frame:
        if trialCounter != 120 and trialCounter != 240 and trialCounter !=360 and trialCounter !=480 and trialCounter !=600 and trialCounter !=720 and trialCounter !=840:
            continueRoutine = False
      Each JS Frame:
        if ((trialCounter !== 120 && trialCounter !== 240 && trialCounter !== 360 && trialCounter !== 480 && trialCounter !== 600 && trialCounter !== 720 && trialCounter !== 840)) {
            continueRoutine = false;
        }
    TextComponent breakMessage
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'c','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Welcome to the experimental trials.
        Be reminded that your task is to look for
        a white or a red semicircle.
        If semicircle is facing left press 'f'.
        If semicircle is facing right press 'j'.
        Press SPACE bar to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine WelcomePractice
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Welcome! Your task is to find
        white or red semicircle and indicate
        if it is facing left or right.
        Press SPACE bar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine practiceTrials
    ImageComponent image
      image [set every repeat] = $ImageFile
      size [set every repeat] = (50*x_scale, 28.125*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'f','j'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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  Routine targetStimuli
    ImageComponent image_2
      image = targets/leftDisc.png
      pos = (0,75)
      size [set every repeat] = (1*x_scale, 1*y_scale)
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Press f if you see left semicircle


        Press j if you see right semicircle


        Press SPACE to start
    ImageComponent image_3
      image = targets/rightDisc.png
      pos = (0, -100)
      size [set every repeat] = (1*x_scale, 1*y_scale)
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  Routine targetStimuli2
  Routine practiceFeedback
    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        msg='doh'
      Begin JS Experiment:
        msg = "doh";
      Begin JS Routine:
        console.log(key_resp_4.corr);

        if(key_resp_4.corr) {
            msg = "Correct!";
        } else {
            msg = "Oops, incorrect";
        }
      Begin Routine:
        if key_resp_4.corr:
            msg = "Correct!"
        else:
            msg = "Oops, incorrect"
      Each JS Frame:
        //if ((manual_loop !== 20)) {
        //    continueRoutine = false;
        //}

        //responses = psychoJS.experiment._trialsData  // get list of responses
        //nCorr = responses.reduce((a, b) => a + b['key_resp_4.corr'], 0)  // get sum
        //meanRT = responses.reduce((a, b) => a + b['key_resp_4.rt'], 0) / responses.length  // get mean

        //meanRT = round(meanRT, 3);
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.5
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  Routine fixation
    PolygonComponent fix
      fillColor = $[1,1,1]
      shape = cross
      size [set every repeat] = (1*x_scale, 1*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text_5
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Look at the fixation cross and press SPACE bar when you
        are ready to start the trial.
        Press 'f' for semicircle facing left.
        Press 'j' for semicircle facing right.
        You will first complete 16 practice trials.
        Press SPACE bar when you are ready to start.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix2
    PolygonComponent fix2experiment
      fillColor = $[1,1,1]
      shape = cross
      size [set every repeat] = (1*x_scale, 1*y_scale)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent1
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Please read each statement carefully and click either SPACE to Agree and continue or ESC to disagree and terminate the experiment.
        Press SPACE to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent2
    TextComponent text_7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        I understand that my participation in this project will involve looking for a target object on a computer screen and indicating what direction the target is facing, by pressing a computer keyboard buttons. This will require approximately 30min of my time.
        I understand that participation in this study is entirely voluntary and that I can withdraw from the study at any time without providing a reason by simply closing the browser or pressing esc button on your keyboard. I am aware that this will lead to loss of course credit or reimbursement. The incomplete data sets will not be saved.
        I understand that I can discuss any concerns with the experimenters before or after participating.
        This research is carried out by postdoctoral research fellow Dr Anna Nowakowska in the School of Psychology, University of Aberdeen under the supervision of lecturer Anna Hughes and lecturer Alasdair Clarke (Department of Psychology, University of Essex)
        Contact information:
        [a.nowakowska@abdn.ac.uk, anna.hughes@essex.ac.uk, a.clarke@essex.ac.uk]
        Press Space to Agree and continue.
        Press ESC button to disagree and terminate the experiment.
        Press SPACE to agree and continue.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent3
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        I understand that the information provided by me will be held anonymously so that it is impossible to trace this information back to me individually. Information will be held on a secure server and may be retained indefinitely.
        To ensure access to the data for the wider research community, the anonymous dataset may be archived in an online repository (e.g., the Open Science Framework, https://osf.io/) or send to other researchers upon request for inspection.
        Press Space to Agree and continue.
        Press ESC button to disagree and terminate the experiment.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent4
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        I confirm that the purpose, participation information, and data storage of this research have been sufficiently explained.
        I understand that at the end of the experiment I will be provided with additional information about the purpose of this research.
        Press SPACE to agree and continue to the experiment.
        Press ESC button to disagree and terminate the experiment.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine creditcard
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        event = psychoJS.eventManager;
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
    CodeComponent code_start
      Code Type = Both
      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin JS Experiment:
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((win.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((win.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
                vsize = win.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (((t - oldt) < 0.5)) {
                dscale = (5 * dbase);
                oldt = t;
            } else {
                dscale = dbase;
                oldt = t;
            }
            if (_pj.in_es6("space", keys)) {
                continueRoutine = false;
            } else {
                if (_pj.in_es6("up", keys)) {
                    y_scale = (round(((y_scale + dscale) * 10000)) / 10000);
                } else {
                    if (_pj.in_es6("down", keys)) {
                        y_scale = (round(((y_scale - dscale) * 10000)) / 10000);
                    } else {
                        if (_pj.in_es6("left", keys)) {
                            x_scale = (round(((x_scale - dscale) * 10000)) / 10000);
                        } else {
                            if (_pj.in_es6("right", keys)) {
                                x_scale = (round(((x_scale + dscale) * 10000)) / 10000);
                            }
                        }
                    }
                }
            }
            screen_height = (round(((vsize * 10) / y_scale)) / 10);
            text_bottom.text = (((((((("X Scale = " + x_scale.toString()) + unittext) + " per cm, Y Scale = ") + y_scale.toString()) + unittext) + " per cm\nScreen height = ") + screen_height.toString()) + " cm\n\nPress the space bar when done");
            ccimage.size = [(x_size * x_scale), (y_size * y_scale)];
        }
      End JS Routine:
        thisExp.addData("X Scale", x_scale);
        thisExp.addData("Y Scale", y_scale);
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      letterHeight = 0.1
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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Flow
  Routine creditcard
  Routine consent1
  Routine consent2
  Routine consent3
  Routine consent4
  Routine WelcomePractice
  Routine instructions
  Routine targetStimuli
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = image_stimuli_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'Practice arrays/exp1a_trial_0_colour1_distractors1_r.png', 'targ_side': 'r', 'correctAnswer': 'j'},
      {'ImageFile': 'Practice arrays/exp1a_trial_1_colour1_distractors4_r.png', 'targ_side': 'r', 'correctAnswer': 'j'},
      {'ImageFile': 'Practice arrays/exp1a_trial_7_colour2_distractors9_r.png', 'targ_side': 'r', 'correctAnswer': 'j'},
      {'ImageFile': 'Practice arrays/exp1a_trial_8_colour2_distractors19_r.png', 'targ_side': 'r', 'correctAnswer': 'j'},
      {'ImageFile': 'Practice arrays/exp1a_trial_10_colour3_distractors1_r.png', 'targ_side': 'r', 'correctAnswer': 'j'},
      {'ImageFile': 'Practice arrays/exp1a_trial_12_colour3_distractors9_r.png', 'targ_side': 'r', 'correctAnswer': 'j'},
      {'ImageFile': 'Practice arrays/exp1a_trial_14_colour3_distractors31_r.png', 'targ_side': 'r', 'correctAnswer': 'j'},
      {'ImageFile': 'Practice arrays/exp1a_trial_17_colour1_distractors9_l.png', 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'Practice arrays/exp1a_trial_18_colour1_distractors19_l.png', 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'Practice arrays/exp1a_trial_21_colour2_distractors4_l.png', 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'Practice arrays/exp1a_trial_23_colour2_distractors19_l.png', 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'Practice arrays/exp1a_trial_25_colour3_distractors1_l.png', 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'Practice arrays/exp1a_trial_27_colour3_distractors9_l.png', 'targ_side': 'l', 'correctAnswer': 'f'}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
    Routine fixation
    Routine practiceTrials
    Routine practiceFeedback
  LoopTerminator trials_2
  Routine WelcomeScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images_List_revisions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'images/exp2c_trial_147_colour1_distractors31_l.png', 'exp': '2c', 'trial': 147, 'colour': 1, 'distNo': 31, 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'images/exp2c_trial_148_colour2_distractors1_l.png', 'exp': '2c', 'trial': 148, 'colour': 2, 'distNo': 1, 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'images/exp2c_trial_149_colour2_distractors4_l.png', 'exp': '2c', 'trial': 149, 'colour': 2, 'distNo': 4, 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'images/exp2c_trial_150_colour2_distractors9_l.png', 'exp': '2c', 'trial': 150, 'colour': 2, 'distNo': 9, 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'images/exp2c_trial_151_colour2_distractors19_l.png', 'exp': '2c', 'trial': 151, 'colour': 2, 'distNo': 19, 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'images/exp2c_trial_152_colour2_distractors31_l.png', 'exp': '2c', 'trial': 152, 'colour': 2, 'distNo': 31, 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'images/exp2c_trial_153_colour3_distractors1_l.png', 'exp': '2c', 'trial': 153, 'colour': 3, 'distNo': 1, 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'images/exp2c_trial_154_colour3_distractors4_l.png', 'exp': '2c', 'trial': 154, 'colour': 3, 'distNo': 4, 'targ_side': 'l', 'correctAnswer': 'f'},
      {'ImageFile': 'images/exp2c_trial_155_colour3_distractors9_l.png', 'exp': '2c', 'trial': 155, 'colour': 3, 'distNo': 9, 'targ_side': 'l', 'correctAnswer': 'f'}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
    Routine fix2
    Routine trial
    Routine break_2
  LoopTerminator trials
