PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = searchDisc2
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Routines
  Routine trial
    ImageComponent dispStimuli
      image [set every repeat] = $ImageFile
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine break_2
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        #msg variable just needs some value at start
        msg='doh'
      Begin JS Experiment:
        msg = "";
      Begin Routine:
        if trials.thisTrialN == 0 or trials.thisTrialN % 19 != 0:
            continueRoutine = False


        nCorr = trials.data['key_resp_2.corr'].sum() #.std(), .mean() also available
        meanRt = trials.data['key_resp_2.rt'].mean()
        msg = "You have completed %i out of 480 trials. You got %i trials correct (rt=%.2f). Press space bar to continue." %(trials.thisTrialN+1,nCorr,meanRt)
    TextComponent breakMessage
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experimental trials.
        Be reminded that your task is to look for a semicircle.
        If the semicircle is facing left press 1.
        If the semicircle is facing right press 2.
        Press SPACE bar to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine WelcomePractice
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment.
        Your task is to look for a semicircle and indicate if it faces to the left or to the right.
        Press '1' to indicate that the semicircle is facing left.
        Press '2' to indicate that the semicircle is facing right.
        You will first complete 20 practice trials.
        Press SPACE bar when you are ready to start.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine practiceTrials
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = norm
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    KeyboardComponent key_resp_4
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trials_2.thisTrialN >19:
            continueRoutine = False
  Routine targetStimuli
    ImageComponent image_2
      image = targets/leftDisc.png
      pos = (-0.01,0.15)
      size = (0.05, 0.1)
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Press 1 if you see left-facing semicircle



        Press 2 if you see right-facing semi circle


        Press SPACE to start
    ImageComponent image_3
      image = targets/rightDisc.png
      pos = (0.01, -0.3)
      size = (0.05, 0.1)
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  Routine targetStimuli2
  Routine practiceFeedback
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        msg='doh'
      Begin JS Experiment:
        msg = "doh";
      Begin JS Routine:
        if (((trials_2.thisTrialN === 0) || ((trials_2.thisTrialN % 19) !== 0))) {
            continueRoutine = false;
        }
        nCorr = trials_2.data["key_resp_4.corr"].sum();
        meanRt = trials_2.data["key_resp_4.rt"].mean();
      Begin Routine:
        if trials_2.thisTrialN == 0 or trials_2.thisTrialN % 19 != 0 or trials_2.thisTrialN > 19:
            continueRoutine = False


        nCorr = trials_2.data['key_resp_4.corr'].sum() #.std(), .mean() also available
        meanRt = trials_2.data['key_resp_4.rt'].mean()
        msg = "You have completed 20 practice trials. You got %i trials correct (rt=%.2f). Press space bar to continue to main experiment." %(nCorr+1,meanRt)
Flow
  Routine WelcomePractice
  Routine targetStimuli
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = image_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'images/exp1a_trial_0_colour1_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_1_colour1_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_2_colour1_distractors9_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_3_colour1_distractors19_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_4_colour1_distractors31_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_5_colour2_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_6_colour2_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_7_colour2_distractors9_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_8_colour2_distractors19_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_9_colour2_distractors31_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_10_colour3_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_11_colour3_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)])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
    Routine practiceTrials
    Routine practiceFeedback
  LoopTerminator trials_2
  Routine WelcomeScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = image_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'images/exp1a_trial_0_colour1_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_1_colour1_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_2_colour1_distractors9_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_3_colour1_distractors19_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_4_colour1_distractors31_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_5_colour2_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_6_colour2_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_7_colour2_distractors9_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_8_colour2_distractors19_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_9_colour2_distractors31_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_10_colour3_distractors1_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)]),
      OrderedDict([('ImageFile', 'images/exp1a_trial_11_colour3_distractors4_r.png'), ('targ_side', 'r'), ('correctAnswer', 2)])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
    Routine trial
    Routine break_2
  LoopTerminator trials
